WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(LedBrightness, Focus, SensorGain, LedRespectsDigitalIn, FramesPerSecond, FileName, BufferSize, Suffix, CameraIndex, CompressVideo, RecordingDuration)
-> GroupWorkflow "Initialize Subjects"
    BooleanProperty(Value=false)
    -> BehaviorSubject RecordButton

    BooleanProperty(Value=false)
    -> BehaviorSubject RecordOnTriggerButton

    ExternalizedMapping(Value(DisplayName=CompressVideo, Category=Recording))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject CompressVideo

    ExternalizedMapping(Value(DisplayName=Suffix, Category=Saving))
    -> PropertySource<Bonsai.Vision.VideoWriter,Bonsai.IO.PathSuffix>(MemberName=Suffix, Value=FileCount)
    -> BehaviorSubject PathSuffix

    ExternalizedMapping(Value(DisplayName=FileName, Category=Saving))
    -> PropertySource<Bonsai.Vision.VideoWriter,System.String>(MemberName=FileName, Value="")
    -> BehaviorSubject FileName

    ExternalizedMapping(Value(DisplayName=RecordingDuration, Category=Recording))
    -> IntProperty(Value=600)
    -> BehaviorSubject RecordingDuration

    BooleanProperty(Value=false)
    -> BehaviorSubject UseRecordDuration

    BooleanProperty(Value=false)
    -> BehaviorSubject RecordingStatus

    IntProperty(Value=100)
    -> BehaviorSubject BackgroundFrames

    DoubleProperty(Value=14.3)
    -> BehaviorSubject BackgroundThreshold

    IntProperty(Value=3)
    -> BehaviorSubject Sigma

    IntProperty(Value=192)
    -> BehaviorSubject SaturationThreshold

    PropertySource<Bonsai.Vision.SolidColor,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=0, Val2=100, Val3=100))
    -> BehaviorSubject SaturationColor

    BooleanProperty(Value=false)
    -> BehaviorSubject CommutatorConnected

    StringProperty(Value="")
    -> BehaviorSubject PortName

    BooleanProperty(Value=true)
    -> BehaviorSubject CommutatorEnable

    BooleanProperty(Value=true)
    -> BehaviorSubject CommutatorEnableLed

    StringProperty
    -> BehaviorSubject CommutatorStatus

    ExternalizedMapping(Value(DisplayName=CameraIndex, Category=Acquisition))
    -> IntProperty(Value=0)
    -> BehaviorSubject CameraIndex

    ExternalizedMapping(Value(DisplayName=LedRespectsDigitalIn, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(MemberName=LedRespectsDigitalIn, Value=None)
    -> BehaviorSubject LedRespectsDigitalIn

    ExternalizedMapping(Value(DisplayName=FramesPerSecond, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.FrameRateV4>(MemberName=FramesPerSecond, Value=Fps30)
    -> BehaviorSubject FrameRate

    ExternalizedMapping(Value(DisplayName=SensorGain, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.GainV4>(MemberName=SensorGain, Value=Low)
    -> BehaviorSubject SensorGain

    ExternalizedMapping(Value(DisplayName=Focus, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,System.Double>(MemberName=Focus, Value=5)
    -> BehaviorSubject Focus

    ExternalizedMapping(Value(DisplayName=LedBrightness, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,System.Double>(MemberName=LedBrightness, Value=0)
    -> BehaviorSubject LedBrightness

    BooleanProperty(Value=false)
    -> BehaviorSubject MiniscopeConnected

    StringProperty
    -> BehaviorSubject MiniscopeStatus

    StringProperty
    -> BehaviorSubject RecordingError

    ExternalizedMapping(Value(DisplayName=BufferSize, Category=Display))
    -> IntProperty(Value=100)
    -> BehaviorSubject BufferSize

    IntProperty(Value=0)
    -> BehaviorSubject DroppedFrames

    PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(MemberName=LedRespectsDigitalIn, Value=DigitalIn0)
    -> BehaviorSubject TriggerInput

GroupWorkflow "Data Acquisition"
    SubscribeSubject MiniscopeConnected
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #2
    SubscribeSubject CameraIndex
    -> PropertyMapping(Index) => #4
    #2, #4 -> SelectMany
        WorkflowInput Source1
        -> StringProperty(Value="Starting acquisition.")
        -> OpenEphys.Miniscope.Design.Gui.LogInfo

        ExternalizedMapping(Index) => #3
        SubscribeSubject LedBrightness
        -> PropertyMapping(LedBrightness) => #5
        SubscribeSubject Focus
        -> PropertyMapping(Focus) => #7
        SubscribeSubject SensorGain
        -> PropertyMapping(SensorGain) => #9
        SubscribeSubject FrameRate
        -> PropertyMapping(FramesPerSecond) => #11
        SubscribeSubject LedRespectsDigitalIn
        -> PropertyMapping(LedRespectsDigitalIn) => #13
        #3, #5, #7, #9, #11, #13 -> OpenEphys.Miniscope.UclaMiniscopeV4(Index=0, LedBrightness=0, Focus=5, SensorGain=Low, FramesPerSecond=Fps30, LedRespectsDigitalIn=None) => #14
        SubscribeSubject MiniscopeConnected
        -> Condition => #16
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #14, #16 -> TakeUntil
        -> Materialize => #18
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch => #21
        -> WorkflowOutput
        #21 -> GroupWorkflow "Log Stop Acquisition"
            WorkflowInput Source1
            -> Materialize
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !it.HasValue && it.Exception == null
            -> StringProperty(Value="Stopping acquisition.")
            -> OpenEphys.Miniscope.Design.Gui.LogInfo
            -> WorkflowOutput
        #21 -> GroupWorkflow "Calculate Dropped Frames"
            WorkflowInput Source1
            -> MemberSelector(Selector=FrameNumber) => #1
            -> Skip(Count=2) => #2
            IntProperty(Value=-1) => #3
            #2, #3 -> Merge => #4
            #1, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Abs(it.Item2 - it.Item1) - 1
            -> Accumulate
            -> DistinctUntilChanged
            -> MulticastSubject DroppedFrames
            -> WorkflowOutput
        #18 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject MiniscopeStatus
    -> Repeat
    -> BehaviorSubject Frame
    -> GroupWorkflow "Calculate Average Frame Rate"
        WorkflowInput Source1
        -> MemberSelector(Selector=HardwareTime)
        -> BufferTime(TimeSpan=PT2S, TimeShift=PT0.1S)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it.Count > 1) ? (it.Count - 1) * 1e3 / (it[it.Count - 1] - it[0]) : (it.Count == 1) ? it[0] / 1e3 : 0.0
        -> PublishSubject AverageFrameRate
        -> WorkflowOutput

    SubscribeSubject MiniscopeStatus
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: !string.IsNullOrEmpty(it)
    -> BooleanProperty(Value=false)
    -> MulticastSubject MiniscopeConnected

    SubscribeSubject MiniscopeConnected
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> MulticastSubject DroppedFrames
-> WorkflowOutput

GroupWorkflow "Display UI"
    OpenEphys.Miniscope.Design.Gui.ImGuiMiniscopeVisualizerBuilder => #0
    -> PublishSubject ImageTick
    #0 -> Bonsai.Design.VisualizerWindow(Text="UCLA MiniscopeV4 GUI", Visible=true, Location(X=400, Y=100), Size(Width=1100, Height=900), WindowState=Normal)

    SubscribeSubject ImageTick
    -> GroupWorkflow StatusBar
        WorkflowInput Source1 => #0
        SubscribeSubject CameraIndex
        -> ObserveOn(Scheduler=DefaultScheduler) => #2
        SubscribeSubject MiniscopeConnected
        -> ObserveOn(Scheduler=DefaultScheduler) => #4
        #2, #4 -> OpenEphys.Miniscope.Design.Gui.CreateStatusBarDto => #5
        #0, #5 -> WithLatestFrom => #6
        SubscribeSubject RecordingStatus
        -> PropertyMapping(RecordingStatus) => #8
        SubscribeSubject AverageFrameRate
        -> PropertyMapping(AverageFrameRate) => #10
        SubscribeSubject Frame
        -> MemberSelector(Selector=FrameNumber)
        -> SampleInterval(Interval=PT1S)
        -> PropertyMapping(FrameNumber) => #14
        SubscribeSubject DroppedFrames
        -> PropertyMapping(DroppedFrames) => #16
        #6, #8, #10, #14, #16 -> OpenEphys.Miniscope.Design.Gui.StatusBar => #17
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #17 -> MemberSelector(Selector=Item2) => #20
        -> MemberSelector(Selector=CameraIndex)
        -> DistinctUntilChanged
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> MulticastSubject CameraIndex
        #20 -> MemberSelector(Selector=IsConnected)
        -> DistinctUntilChanged
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> MulticastSubject MiniscopeConnected
    -> GroupWorkflow "Plot Settings"
        WorkflowInput Source1 => #0
        GroupWorkflow Miniscope => #1
            SubscribeSubject LedBrightness => #0
            SubscribeSubject Focus => #1
            SubscribeSubject SensorGain => #2
            SubscribeSubject FrameRate => #3
            SubscribeSubject LedRespectsDigitalIn => #4
            #0, #1, #2, #3, #4 -> OpenEphys.Miniscope.Design.Gui.CreateMiniscopeSettingsDto
            -> WorkflowOutput
        GroupWorkflow File => #2
            SubscribeSubject RecordButton => #0
            SubscribeSubject RecordOnTriggerButton => #1
            SubscribeSubject CompressVideo => #2
            SubscribeSubject FileName => #3
            SubscribeSubject PathSuffix => #4
            SubscribeSubject RecordingDuration => #5
            SubscribeSubject UseRecordDuration => #6
            SubscribeSubject TriggerInput => #7
            #0, #1, #2, #3, #4, #5, #6, #7 -> OpenEphys.Miniscope.Design.Gui.CreateFileSettingsDto
            -> WorkflowOutput
        GroupWorkflow Saturation => #3
            SubscribeSubject SaturationThreshold => #0
            SubscribeSubject SaturationColor => #1
            #0, #1 -> OpenEphys.Miniscope.Design.Gui.CreateSaturationSettingsDto
            -> WorkflowOutput
        GroupWorkflow Dff => #4
            SubscribeSubject BackgroundFrames => #0
            SubscribeSubject BackgroundThreshold => #1
            SubscribeSubject Sigma => #2
            #0, #1, #2 -> OpenEphys.Miniscope.Design.Gui.CreateDffSettingsDto
            -> WorkflowOutput
        GroupWorkflow Commutator => #5
            SubscribeSubject PortName => #0
            SubscribeSubject CommutatorConnected => #1
            SubscribeSubject CommutatorEnable => #2
            SubscribeSubject CommutatorEnableLed => #3
            #0, #1, #2, #3 -> OpenEphys.Miniscope.Design.Gui.CreateCommutatorSettingsDto
            -> WorkflowOutput
        #1, #2, #3, #4, #5 -> OpenEphys.Miniscope.Design.Gui.CreateSettingsPanelDto => #6
        #0, #6 -> WithLatestFrom => #7
        SubscribeSubject MiniscopeConnected
        -> PropertyMapping(AcquisitionStatus) => #9
        #7, #9 -> OpenEphys.Miniscope.Design.Gui.SettingsPanel(AcquisitionStatus=false) => #10
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #10 -> MemberSelector(Selector=Item2)
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl => #14
        -> GroupWorkflow Miniscope
            WorkflowInput Source1
            -> MemberSelector(Selector=Miniscope) => #1
            -> MemberSelector(Selector=LedBrightness)
            -> DistinctUntilChanged
            -> MulticastSubject LedBrightness
            #1 -> MemberSelector(Selector=Focus)
            -> DistinctUntilChanged
            -> MulticastSubject Focus
            #1 -> MemberSelector(Selector=SensorGain)
            -> DistinctUntilChanged
            -> MulticastSubject SensorGain
            #1 -> MemberSelector(Selector=FrameRate)
            -> DistinctUntilChanged
            -> MulticastSubject FrameRate
            #1 -> MemberSelector(Selector=LedRespectsDigitalIn)
            -> DistinctUntilChanged
            -> MulticastSubject LedRespectsDigitalIn
        #14 -> GroupWorkflow File
            WorkflowInput Source1
            -> MemberSelector(Selector=File) => #1
            -> MemberSelector(Selector=RecordButton)
            -> DistinctUntilChanged
            -> Condition
                SubscribeSubject MiniscopeConnected
                -> WorkflowOutput
            -> MulticastSubject RecordButton
            #1 -> MemberSelector(Selector=RecordOnTriggerButton)
            -> DistinctUntilChanged
            -> Condition
                SubscribeSubject MiniscopeConnected
                -> WorkflowOutput
            -> MulticastSubject RecordOnTriggerButton
            #1 -> MemberSelector(Selector=CompressVideo)
            -> DistinctUntilChanged
            -> MulticastSubject CompressVideo
            #1 -> MemberSelector(Selector=FileName)
            -> DistinctUntilChanged
            -> MulticastSubject FileName
            #1 -> MemberSelector(Selector=Suffix)
            -> DistinctUntilChanged
            -> MulticastSubject PathSuffix
            #1 -> MemberSelector(Selector=RecordingDuration)
            -> DistinctUntilChanged
            -> MulticastSubject RecordingDuration
            #1 -> MemberSelector(Selector=UseRecordDuration)
            -> DistinctUntilChanged
            -> MulticastSubject UseRecordDuration
            #1 -> MemberSelector(Selector=TriggerInput)
            -> DistinctUntilChanged
            -> MulticastSubject TriggerInput
        #14 -> GroupWorkflow Saturation
            WorkflowInput Source1
            -> MemberSelector(Selector=Saturation) => #1
            -> MemberSelector(Selector=Threshold)
            -> DistinctUntilChanged
            -> MulticastSubject SaturationThreshold
            #1 -> MemberSelector(Selector=Color)
            -> DistinctUntilChanged
            -> MulticastSubject SaturationColor
        #14 -> GroupWorkflow Dff
            WorkflowInput Source1
            -> MemberSelector(Selector=Dff) => #1
            -> MemberSelector(Selector=BackgroundFrames)
            -> DistinctUntilChanged
            -> MulticastSubject BackgroundFrames
            #1 -> MemberSelector(Selector=BackgroundThreshold)
            -> DistinctUntilChanged
            -> MulticastSubject BackgroundThreshold
            #1 -> MemberSelector(Selector=Sigma)
            -> DistinctUntilChanged
            -> MulticastSubject Sigma
        #14 -> GroupWorkflow Commutator
            WorkflowInput Source1
            -> MemberSelector(Selector=Commutator) => #1
            -> MemberSelector(Selector=PortName)
            -> DistinctUntilChanged
            -> MulticastSubject PortName
            #1 -> MemberSelector(Selector=IsConnected)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorConnected
            #1 -> MemberSelector(Selector=Enable)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorEnable
            #1 -> MemberSelector(Selector=EnableLed)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorEnableLed
    -> OpenEphys.Miniscope.Design.Gui.SameLine
    -> GroupWorkflow "Plot Data"
        WorkflowInput Source1 => #0
        SubscribeSubject BufferSize => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject Frame
        -> MemberSelector(Selector=Image) => #4
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame ImageTick
        -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        -> PropertyMapping(MiniscopeImage) => #7
        #4 -> GroupWorkflow CalculateDisplaySaturation
            WorkflowInput Source1 => #0
            SubscribeSubject SaturationThreshold
            -> PropertyMapping(ThresholdValue) => #2
            #0, #2 -> Bonsai.Vision.Threshold(ThresholdValue=192, MaxValue=255, ThresholdType=Binary) => #3
            -> MemberSelector(Selector=Size)
            -> PropertyMapping(Size) => #5
            SubscribeSubject SaturationColor
            -> PropertyMapping(Color) => #7
            #3, #5, #7 -> Bonsai.Vision.SolidColor(Size(Width=640, Height=480), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=100, Val3=100)) => #8
            #8, #3 -> Zip
            -> Bonsai.Vision.Mask(FillValue(Val0=0, Val1=0, Val2=0, Val3=1)) => #10
            #0, #2 -> Bonsai.Vision.Threshold(ThresholdValue=192, MaxValue=255, ThresholdType=ToZeroInv) => #11
            #10, #11 -> Zip
            -> Add
            -> WorkflowOutput
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame ImageTick
        -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        -> PropertyMapping(SaturationImage) => #11
        #4 -> GroupWorkflow "Calculate DeltaFOverF"
            WorkflowInput Source1 => #0
            SubscribeSubject BackgroundFrames
            -> PropertyMapping(BackgroundFrames) => #2
            SubscribeSubject BackgroundThreshold
            -> PropertyMapping(BackgroundThreshold) => #4
            SubscribeSubject Sigma
            -> PropertyMapping(Sigma) => #6
            #0, #2, #4, #6 -> OpenEphys.Miniscope.DeltaFOverF(BackgroundFrames=100, BackgroundThreshold=14.3, Sigma=3)
            -> WorkflowOutput
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame ImageTick
        -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        -> PropertyMapping(dFFImage) => #15
        #4 -> MemberSelector(Selector=Size)
        -> DistinctUntilChanged => #17
        -> MemberSelector(Selector=Height)
        -> PropertyMapping(ImageHeight) => #19
        #17 -> MemberSelector(Selector=Width)
        -> PropertyMapping(ImageWidth) => #21
        #4 -> Bonsai.Vision.ImageHistogram
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame ImageTick
        -> PropertyMapping(ImageHistogram) => #24
        SubscribeSubject MiniscopeConnected
        -> Condition => #26
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject BufferSize
        -> PropertyMapping(Capacity) => #28
        #26, #28 -> SelectMany
            SubscribeSubject Frame
            -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
            -> MemberSelector(Selector=Quaternion) => #2
            ExternalizedMapping(Capacity) => #3
            #2, #3 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=100, IndexSelector="", ValueSelector="X,Y,Z,W") => #4
            SubscribeSubject MiniscopeConnected
            -> Condition => #6
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            #4, #6 -> TakeUntil
            -> WorkflowOutput
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame ImageTick
        -> PropertyMapping(QuaternionSeries) => #31
        #28, #26 -> SelectMany
            SubscribeSubject Frame
            -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
            -> MemberSelector(Selector=DigitalIn) => #2
            -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #3
            #2 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn1)) => #4
            #3, #4 -> Zip => #5
            ExternalizedMapping(Capacity) => #6
            #5, #6 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=100, IndexSelector="", ValueSelector="Item1,Item2") => #7
            SubscribeSubject MiniscopeConnected
            -> Condition => #9
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            #7, #9 -> TakeUntil
            -> WorkflowOutput
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame ImageTick
        -> PropertyMapping(DigitalInSeries) => #34
        SubscribeSubject MiniscopeConnected
        -> PropertyMapping(AcquisitionStatus) => #36
        #2, #7, #11, #15, #19, #21, #24, #31, #34, #36 -> OpenEphys.Miniscope.Design.Gui.DataPanel(ImageHeight=480, ImageWidth=640, ImageHeightFraction=0.6) => #37
        -> WorkflowOutput
        #37 -> MemberSelector(Selector=Item2)
        -> DistinctUntilChanged
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> MulticastSubject BufferSize

GroupWorkflow "Save Data"
    SubscribeSubject RecordButton
    -> Condition => #1
        WorkflowInput Source1 => #0
        SubscribeSubject MiniscopeConnected => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 && it.Item2
        -> WorkflowOutput
    SubscribeSubject Frame
    -> MemberSelector(Selector=DigitalIn) => #3
    SubscribeSubject TriggerInput
    -> PropertyMapping(Value) => #5
    #3, #5 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #6
    SubscribeSubject RecordOnTriggerButton
    -> Condition => #8
        WorkflowInput Source1 => #0
        SubscribeSubject MiniscopeConnected => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 && it.Item2
        -> WorkflowOutput
    #6, #8 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 && it.Item2
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #12
    #1, #12 -> Merge
    -> Take(Count=1)
    -> MulticastSubject RecordingStatus
    -> StringProperty
    -> MulticastSubject RecordingError => #17
    SubscribeSubject FileName
    -> Format(Format={0}.avi)
    -> PropertyMapping(ImageFileName) => #20
    SubscribeSubject CompressVideo
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it ? "MJPG" : "Y800"
    -> PropertyMapping(FourCC) => #23
    SubscribeSubject PathSuffix
    -> PropertyMapping(Suffix) => #25
    SubscribeSubject FileName
    -> Format(Format={0}.csv)
    -> PropertyMapping(CsvFileName) => #28
    SubscribeSubject FrameRate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32(it.ToString().Substring(3))
    -> PropertyMapping(FrameRate) => #31
    #17, #20, #23, #25, #28, #31 -> SelectMany
        SubscribeSubject Frame
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl => #1
        GroupWorkflow "Button Stop" => #2
            SubscribeSubject RecordButton => #0
            SubscribeSubject RecordOnTriggerButton => #1
            #0, #1 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !it.Item1 && !it.Item2
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        #1 -> GroupWorkflow "TriggerInput Stop" => #3
            WorkflowInput Source1
            -> MemberSelector(Selector=DigitalIn) => #1
            SubscribeSubject TriggerInput
            -> PropertyMapping(Value) => #3
            #1, #3 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0))
            -> BitwiseNot => #5
            SubscribeSubject RecordOnTriggerButton
            -> Condition => #7
                WorkflowInput Source1
                -> WorkflowOutput
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 && it.Item2
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        GroupWorkflow "Record Duration Stop" => #4
            SubscribeSubject UseRecordDuration
            -> Condition => #1
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject RecordingDuration
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #4
            #1, #4 -> Delay(DueTime=PT10M)
            -> WorkflowOutput
        GroupWorkflow "Disconnected Stop" => #5
            SubscribeSubject MiniscopeConnected
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> WorkflowOutput
        #2, #3, #4, #5 -> Merge
        -> Take(Count=1)
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordingStatus => #10
        #1, #10 -> TakeUntil => #11
        -> WorkflowOutput
        #11 -> MemberSelector(Selector="FrameNumber,HardwareTime,Quaternion.X,Quaternion.Y,Quaternion.Z,Quaternion.W,DigitalIn")
        -> Timestamp => #14
        ExternalizedMapping(FileName(DisplayName=CsvFileName)) => #15
        ExternalizedMapping(Suffix) => #16
        #14, #15, #16 -> Bonsai.IO.CsvWriter(FileName=.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError => #21
        -> Catch
        #11 -> MemberSelector(Selector=Image)
        -> Bonsai.Vision.Grayscale => #24
        ExternalizedMapping(FourCC, FrameRate, FileName(DisplayName=ImageFileName)) => #25
        #24, #25, #16 -> Bonsai.Vision.VideoWriter
          FileName=.avi
          Suffix=FileCount
          Buffered=true
          Overwrite=false
          FourCC=Y800
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError => #30
        #21, #30 -> Merge
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordingStatus
        #30 -> Catch
    -> Repeat

    GroupWorkflow "Reset Trigger Button"
        SubscribeSubject MiniscopeConnected
        -> Condition => #1
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        SubscribeSubject RecordOnTriggerButton => #2
        #1, #2 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 && it.Item2
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordOnTriggerButton

    GroupWorkflow "Reset Button for Duration"
        SubscribeSubject RecordingStatus
        -> Condition => #1
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        SubscribeSubject UseRecordDuration => #2
        #1, #2 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 && it.Item2
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordButton

    GroupWorkflow "Reset Buttons On Error"
        SubscribeSubject RecordingError
        -> Condition => #1
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !string.IsNullOrEmpty(it)
            -> WorkflowOutput
        SubscribeSubject MiniscopeStatus
        -> Condition => #3
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !string.IsNullOrEmpty(it)
            -> WorkflowOutput
        #1, #3 -> Merge
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordButton
        -> MulticastSubject RecordOnTriggerButton
        -> WorkflowOutput

GroupWorkflow Commutator
    SubscribeSubject CommutatorConnected
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #2
    SubscribeSubject PortName
    -> PropertyMapping(PortName) => #4
    SubscribeSubject CommutatorEnable
    -> PropertyMapping(Enable) => #6
    SubscribeSubject CommutatorEnableLed
    -> PropertyMapping(EnableLed) => #8
    #2, #4, #6, #8 -> SelectMany
        SubscribeSubject Frame
        -> OpenEphys.Miniscope.Design.Gui.ObserveOnControl
        -> MemberSelector(Selector=Quaternion) => #2
        ExternalizedMapping(PortName, Enable, EnableLed) => #3
        #2, #3 -> IncludeWorkflow(Path=OpenEphys.Commutator:AutoCommutator.bonsai, PortName="", Enable=true, EnableLed=true) => #4
        SubscribeSubject CommutatorConnected
        -> Condition => #6
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #4, #6 -> TakeUntil
        -> Materialize => #8
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch
        -> WorkflowOutput
        #8 -> Bonsai.Scripting.Expressions.ExpressionCondition => #13
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject CommutatorStatus
        #13 -> BooleanProperty(Value=false)
        -> MulticastSubject CommutatorConnected
    -> Repeat

GroupWorkflow "Log Recording Files"
    SubscribeSubject RecordingStatus
    -> DistinctUntilChanged => #1
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject FileName => #3
    #2, #3 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> OpenEphys.Miniscope.Design.Gui.LogFileWritten
    #1 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> Skip(Count=1)
    -> StringProperty(Value="Stopping recording.")
    -> OpenEphys.Miniscope.Design.Gui.LogInfo

GroupWorkflow "Log Errors"
    SubscribeSubject RecordingError => #0
    SubscribeSubject MiniscopeStatus => #1
    SubscribeSubject CommutatorStatus => #2
    #0, #1, #2 -> Merge
    -> OpenEphys.Miniscope.Design.Gui.LogError
