WorkflowBuilder(Version=2.9.1)
ExternalizedMapping(StopWorkflowOnClose) => #0
ExternalizedMapping(ConfigFilePath) => #1
#0, #1 -> GroupWorkflow "Initialize Subjects"
    OpenEphys.MiniscopeV4.Gui.CreateMiniscopeLog
    -> BehaviorSubject MiniscopeLog

    OpenEphys.MiniscopeV4.Gui.CreateGuiLayout
    -> BehaviorSubject GuiLayout

    OpenEphys.MiniscopeV4.Gui.CameraStatus(IsConnected=false, Paused=false, CameraIndex=0)
    -> BehaviorSubject Status

    OpenEphys.MiniscopeV4.Gui.MiniscopeSettings(LedBrightness=0, Focus=0, SensorGain=Low, FrameRate=Fps30, LedRespectsDigitalIn=None)
    -> BehaviorSubject Miniscope

    OpenEphys.MiniscopeV4.Gui.CommutatorSettings(IsConnected=false, PortName="", Enable=true, EnableLed=true, AutoConnect=false)
    -> BehaviorSubject Commutator

    PropertySource<OpenEphys.MiniscopeV4.Gui.SaturationSettings,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=0, Val2=100, Val3=0))
    -> PropertyMapping(Color)
    -> OpenEphys.MiniscopeV4.Gui.SaturationSettings(Threshold=192)
    -> PropertyMapping(Saturation) => #13
    OpenEphys.MiniscopeV4.Gui.DffSettings(BackgroundFrames=100, BackgroundThreshold=92, Sigma=3)
    -> PropertyMapping(Dff) => #15
    PropertySource<OpenEphys.MiniscopeV4.Gui.SaturationSettings,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=255, Val2=0, Val3=0))
    -> PropertyMapping(ReferenceColor) => #17
    PropertySource<OpenEphys.MiniscopeV4.Gui.SaturationSettings,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=255, Val1=0, Val2=0, Val3=0))
    -> PropertyMapping(LiveColor) => #19
    #17, #19 -> OpenEphys.MiniscopeV4.Gui.OverlaySettings(Capture=false, ApplyOverlay=false, ReferencePath="")
    -> PropertyMapping(Overlay) => #21
    #13, #15, #21 -> OpenEphys.MiniscopeV4.Gui.DataDisplaySettings
    -> BehaviorSubject DataDisplay

    OpenEphys.MiniscopeV4.Gui.FileSettings
      RecordButton=false
      RecordingMode=Manual
      CompressVideo=false
      FileName=""
      Suffix=FileCount
      RecordingDuration=600
      TotalDuration=3600
      SegmentMode=SingleFile
      TriggerInput=DigitalIn0
    -> BehaviorSubject File

    BooleanProperty(Value=false)
    -> BehaviorSubject RecordingStatus

    StringProperty
    -> BehaviorSubject CommutatorStatus

    StringProperty
    -> BehaviorSubject MiniscopeStatus

    StringProperty
    -> BehaviorSubject RecordingError

    IntProperty(Value=0)
    -> BehaviorSubject DroppedFrames

    ExternalizedMapping(Value(DisplayName=StopWorkflowOnClose, Category=Workflow))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject StopWorkflowOnClose

    PropertySource<OpenEphys.MiniscopeV4.Gui.DataPanel,OpenEphys.MiniscopeV4.Gui.ImageTab>(MemberName=ImageTab, Value=Raw)
    -> BehaviorSubject ImageTab

    ExternalizedMapping(ConfigFilePath)
    -> OpenEphys.MiniscopeV4.Gui.ConfigurationRequest(RequestType=AutoLoad, ConfigFilePath=../../launcher/default_minscopev4_config.yml)
    -> BehaviorSubject ConfigRequest

    BooleanProperty(Value=false)
    -> BehaviorSubject TotalDurationElapsed

    IntProperty(Value=0)
    -> BehaviorSubject TotalTimeRemaining
GroupWorkflow "Data Acquisition" => #3
    SubscribeSubject Status
    -> MemberSelector(Selector=IsConnected)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> StringProperty
    -> MulticastSubject MiniscopeStatus => #6
    SubscribeSubject Status
    -> MemberSelector(Selector=CameraIndex)
    -> PropertyMapping(Index) => #9
    #6, #9 -> SelectMany
        WorkflowInput Source1
        -> StringProperty(Value="Starting acquisition.") => #1
        SubscribeSubject MiniscopeLog => #2
        #1, #2 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo

        ExternalizedMapping(Index) => #5
        SubscribeSubject Miniscope => #6
        -> MemberSelector(Selector=LedBrightness)
        -> PropertyMapping(LedBrightness) => #8
        #6 -> MemberSelector(Selector=Focus)
        -> PropertyMapping(Focus) => #10
        #6 -> MemberSelector(Selector=SensorGain)
        -> PropertyMapping(SensorGain) => #12
        #6 -> MemberSelector(Selector=FrameRate)
        -> PropertyMapping(FramesPerSecond) => #14
        #6 -> MemberSelector(Selector=LedRespectsDigitalIn)
        -> PropertyMapping(LedRespectsDigitalIn) => #16
        #5, #8, #10, #12, #14, #16 -> OpenEphys.Miniscope.UclaMiniscopeV4(Index=0, LedBrightness=0, Focus=0, SensorGain=Low, FramesPerSecond=Fps30, LedRespectsDigitalIn=None) => #17
        SubscribeSubject Status
        -> MemberSelector(Selector=IsConnected)
        -> DistinctUntilChanged
        -> Condition => #21
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #17, #21 -> TakeUntil
        -> Materialize => #23
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch => #26
        -> WorkflowOutput
        #26 -> GroupWorkflow "Log Stop Acquisition"
            WorkflowInput Source1
            -> Materialize
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !it.HasValue && it.Exception == null
            -> StringProperty(Value="Stopping acquisition.") => #3
            SubscribeSubject MiniscopeLog => #4
            #3, #4 -> WithLatestFrom
            -> OpenEphys.MiniscopeV4.Gui.LogInfo
            -> WorkflowOutput
        #26 -> GroupWorkflow "Calculate Dropped Frames"
            WorkflowInput Source1
            -> MemberSelector(Selector=FrameNumber) => #1
            -> Skip(Count=1) => #2
            #1, #2 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item2 - it.Item1 - 1
            -> Accumulate
            -> DistinctUntilChanged
            -> MulticastSubject DroppedFrames
            -> WorkflowOutput
        #23 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject MiniscopeStatus
    -> Repeat
    -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
    -> BehaviorSubject Frame
    -> GroupWorkflow "Calculate Average Frame Rate"
        WorkflowInput Source1
        -> MemberSelector(Selector=HardwareTime)
        -> BufferTime(TimeSpan=PT2S, TimeShift=PT0.1S) => #2
        SubscribeSubject Status
        -> MemberSelector(Selector=IsConnected) => #4
        #2, #4 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it.Item1.Count > 1) && it.Item2 ? (it.Item1.Count - 1 )* 1e3 / (it.Item1[it.Item1.Count - 1] - it.Item1[0]) : 0.0
        -> PublishSubject AverageFrameRate
        -> WorkflowOutput

    GroupWorkflow "Update Connected Status"
        SubscribeSubject MiniscopeStatus
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !string.IsNullOrEmpty(it)
        -> BooleanProperty(Value=false)
        -> PublishSubject DisconnectedMiniscope => #3
        SubscribeSubject DisconnectedMiniscope
        -> PropertyMapping(IsConnected) => #5
        SubscribeSubject Status => #6
        -> MemberSelector(Selector=Paused)
        -> PropertyMapping(Paused) => #8
        #6 -> MemberSelector(Selector=CameraIndex)
        -> PropertyMapping(CameraIndex) => #10
        #3, #5, #8, #10 -> OpenEphys.MiniscopeV4.Gui.CameraStatus(IsConnected=false, Paused=false, CameraIndex=0)
        -> MulticastSubject Status
        -> WorkflowOutput

    SubscribeSubject Status
    -> MemberSelector(Selector=IsConnected)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> MulticastSubject DroppedFrames

    SubscribeSubject Frame
    -> MemberSelector(Selector=FrameNumber) => #23
    SubscribeSubject MiniscopeLog => #24
    #23, #24 -> WithLatestFrom
    -> OpenEphys.MiniscopeV4.Gui.UpdateLogFrameNumber
OpenEphys.MiniscopeV4.Gui.MiniscopeVisualizerClosed => #4
#4, #1 -> GroupWorkflow SaveConfigOnClose
    WorkflowInput Source1 => #0
    -> WorkflowOutput
    ExternalizedMapping(RequestType, ConfigFilePath) => #2
    #2, #0 -> OpenEphys.MiniscopeV4.Gui.ConfigurationRequest(RequestType=AutoSave, ConfigFilePath=../../launcher/default_minscopev4_config.yml)
    -> MulticastSubject ConfigRequest
-> Condition StopOnWorkflowClose => #6
    SubscribeSubject StopWorkflowOnClose
    -> WorkflowOutput
#3, #6 -> TakeUntil
-> WorkflowOutput

GroupWorkflow LoadConfigSettings
    SubscribeSubject ConfigRequest => #0
    SubscribeSubject MiniscopeLog => #1
    #0, #1 -> OpenEphys.MiniscopeV4.Gui.LoadConfiguration
    -> Materialize => #3
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it.Exception == null
    -> Dematerialize
    -> Catch => #6
    -> GroupWorkflow UpdateStatus
        WorkflowInput Source1
        -> MemberSelector(Selector=Camera) => #1
        -> Condition "Not Connected"
            SubscribeSubject Status
            -> MemberSelector(Selector=IsConnected)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=CameraIndex)
        -> PublishSubject UpdateIndex => #4
        SubscribeSubject UpdateIndex
        -> PropertyMapping(CameraIndex) => #6
        #4, #6 -> OpenEphys.MiniscopeV4.Gui.CameraStatus(IsConnected=false, Paused=false, CameraIndex=0)
        -> MulticastSubject Status
        -> WorkflowOutput
        #1 -> Condition Connected => #10
            SubscribeSubject Status
            -> MemberSelector(Selector=IsConnected)
            -> WorkflowOutput
        SubscribeSubject Status
        -> MemberSelector(Selector=CameraIndex) => #12
        #10, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionCondition DifferentIndices
          Expression: it.Item1.CameraIndex != it.Item2
        -> StringProperty(Value="Cannot update camera index while connected to a camera. Stop acquisition and try to import settings again.") => #15
        SubscribeSubject MiniscopeLog => #16
        #15, #16 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogWarning
    #6 -> GroupWorkflow UpdateHardwareSettings
        WorkflowInput Source1
        -> MemberSelector(Selector=Hardware) => #1
        -> MemberSelector(Selector=Miniscope)
        -> MulticastSubject Miniscope
        #1 -> MemberSelector(Selector=Commutator) => #4
        -> Condition "Not Connected" => #5
            SubscribeSubject Commutator
            -> MemberSelector(Selector=IsConnected)
            -> BitwiseNot
            -> WorkflowOutput
        #4 -> Condition Connected => #6
            SubscribeSubject Commutator
            -> MemberSelector(Selector=IsConnected)
            -> WorkflowOutput
        SubscribeSubject Commutator
        -> MemberSelector(Selector=PortName) => #8
        #6, #8 -> WithLatestFrom => #9
        -> Bonsai.Scripting.Expressions.ExpressionCondition SamePorts
          Expression: it.Item1.PortName == it.Item2
        -> MemberSelector(Selector=Item1) => #11
        #5, #11 -> Merge
        -> GroupWorkflow UpdateCommutatorSettings
            WorkflowInput Source1
            -> PublishSubject UpdateCommutator => #1
            SubscribeSubject UpdateCommutator => #2
            -> MemberSelector(Selector=PortName)
            -> PropertyMapping(PortName) => #4
            #2 -> MemberSelector(Selector=Enable)
            -> PropertyMapping(Enable) => #6
            #2 -> MemberSelector(Selector=EnableLed)
            -> PropertyMapping(EnableLed) => #8
            #2 -> MemberSelector(Selector=AutoConnect)
            -> PropertyMapping(AutoConnect) => #10
            #1, #4, #6, #8, #10 -> OpenEphys.MiniscopeV4.Gui.CommutatorSettings(IsConnected=false, PortName=COM3, Enable=true, EnableLed=true, AutoConnect=false)
            -> MulticastSubject Commutator
            -> WorkflowOutput
        #9 -> Bonsai.Scripting.Expressions.ExpressionCondition DifferentPorts
          Expression: it.Item1.PortName != it.Item2
        -> StringProperty(Value="Cannot update COM port while connected to a commutator. Disconnect and try to import settings again.") => #15
        SubscribeSubject MiniscopeLog => #16
        #15, #16 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogWarning
    #6 -> GroupWorkflow UpdateDataDisplaySettings
        WorkflowInput Source1
        -> MemberSelector(Selector=Display)
        -> MulticastSubject DataDisplay
        -> WorkflowOutput
    #6 -> GroupWorkflow UpdateFileSettings
        WorkflowInput Source1
        -> MemberSelector(Selector=File) => #1
        -> Condition IsNotRecording
            SubscribeSubject File
            -> MemberSelector(Selector=RecordButton)
            -> BitwiseNot
            -> WorkflowOutput
        -> MulticastSubject File
        -> WorkflowOutput
        #1 -> Condition IsRecording
            SubscribeSubject File
            -> MemberSelector(Selector=RecordButton)
            -> WorkflowOutput
        -> StringProperty(Value="Cannot update file settings while recording data. Stop recording and try to import settings again.") => #6
        SubscribeSubject MiniscopeLog => #7
        #6, #7 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogWarning
    #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it.Exception != null
    -> Format => #12
      Format:
        Could not load configuration settings. Using default settings.
        {0}
      Selector=Exception.Message
    SubscribeSubject MiniscopeLog => #13
    #12, #13 -> WithLatestFrom
    -> OpenEphys.MiniscopeV4.Gui.LogWarning

GroupWorkflow SaveConfigSettings
    SubscribeSubject ConfigRequest
    -> DistinctUntilChanged
    -> PublishSubject GenerateHardwareSettings
    -> PublishSubject GenerateMiniscopeConfiguration => #3
    SubscribeSubject GenerateMiniscopeConfiguration => #4
    SubscribeSubject GenerateHardwareSettings => #5
    SubscribeSubject Miniscope
    -> PropertyMapping(Miniscope) => #7
    SubscribeSubject Commutator
    -> PropertyMapping(Commutator) => #9
    #5, #7, #9 -> OpenEphys.MiniscopeV4.Gui.HardwareSettings
    -> PropertyMapping(Hardware) => #11
    SubscribeSubject Status
    -> PropertyMapping(Camera) => #13
    SubscribeSubject DataDisplay
    -> PropertyMapping(Display) => #15
    SubscribeSubject File
    -> PropertyMapping(File) => #17
    #4, #11, #13, #15, #17 -> OpenEphys.MiniscopeV4.Gui.MiniscopeConfiguration => #18
    #3, #18 -> WithLatestFrom => #19
    SubscribeSubject MiniscopeLog => #20
    #19, #20 -> OpenEphys.MiniscopeV4.Gui.SaveConfiguration

GroupWorkflow "Display UI"
    OpenEphys.MiniscopeV4.Gui.ImGuiMiniscopeVisualizerBuilder => #0
    -> PublishSubject ImageTick
    -> Condition "Not Paused"
        SubscribeSubject Status
        -> MemberSelector(Selector=Paused)
        -> BitwiseNot
        -> WorkflowOutput
    -> PublishSubject DisplayTick
    #0 -> Bonsai.Design.VisualizerWindow(Text="UCLA MiniscopeV4 GUI", Visible=true, Location(X=400, Y=100), Size(Width=1100, Height=900), WindowState=Normal)

    SubscribeSubject ImageTick
    -> GroupWorkflow StatusBar
        WorkflowInput Source1 => #0
        SubscribeSubject GuiLayout => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject Status => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject RecordingStatus
        -> PropertyMapping(RecordingStatus) => #7
        SubscribeSubject AutoRestartTriggered
        -> PropertyMapping(AutomaticRestartTriggered) => #9
        SubscribeSubject Commutator
        -> PropertyMapping(CommutatorSettings) => #11
        #5, #7, #9, #11 -> OpenEphys.MiniscopeV4.Gui.StatusBar => #12
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #12 -> MemberSelector(Selector=Item2)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> DistinctUntilChanged
        -> MulticastSubject Status
    -> GroupWorkflow "Plot Settings"
        WorkflowInput Source1
        -> PublishSubject UpdateHardwareSettings => #1
        SubscribeSubject UpdateHardwareSettings => #2
        SubscribeSubject Miniscope
        -> PropertyMapping(Miniscope) => #4
        SubscribeSubject Commutator
        -> PropertyMapping(Commutator) => #6
        #2, #4, #6 -> OpenEphys.MiniscopeV4.Gui.HardwareSettings => #7
        #1, #7 -> Zip => #8
        SubscribeSubject MiniscopeLog => #9
        SubscribeSubject Status
        -> MemberSelector(Selector=IsConnected)
        -> PropertyMapping(AcquisitionStatus) => #12
        SubscribeSubject RecordingStatus
        -> PropertyMapping(RecordingStatus) => #14
        #8, #9, #12, #14 -> OpenEphys.MiniscopeV4.Gui.SettingsPanel(AcquisitionStatus=false, RecordingStatus=false) => #15
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #15 -> MemberSelector(Selector=Item2) => #18
        -> MemberSelector(Selector=Miniscope)
        -> DistinctUntilChanged
        -> MulticastSubject Miniscope
        #18 -> MemberSelector(Selector=Commutator)
        -> DistinctUntilChanged
        -> MulticastSubject Commutator
        #15 -> MemberSelector(Selector=Item3)
        -> DistinctUntilChanged
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> MulticastSubject ConfigRequest

        GroupWorkflow "Log Commutator Status"
            SubscribeSubject Commutator
            -> MemberSelector(Selector=IsConnected)
            -> DistinctUntilChanged
            -> Skip(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: it ? "Commutator connected" : "Commutator disconnected"
            SubscribeSubject MiniscopeLog => #5
            #4, #5 -> WithLatestFrom
            -> OpenEphys.MiniscopeV4.Gui.LogInfo
    -> GroupWorkflow File
        WorkflowInput Source1 => #0
        SubscribeSubject File => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject Status
        -> MemberSelector(Selector=IsConnected)
        -> PropertyMapping(AcquisitionStatus) => #5
        #2, #5 -> OpenEphys.MiniscopeV4.Gui.FilePanel(AcquisitionStatus=false) => #6
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #6 -> MemberSelector(Selector=Item2)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> DistinctUntilChanged
        -> MulticastSubject File

        GroupWorkflow "Set Total Time"
            SubscribeSubject File
            -> MemberSelector(Selector=RecordButton)
            -> DistinctUntilChanged
            -> Condition IsTrue
                WorkflowInput Source1
                -> WorkflowOutput
            -> Condition IsSegmentedMode
                SubscribeSubject File
                -> MemberSelector(Selector=RecordingMode)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Segmented))
                -> WorkflowOutput
            -> Condition TotalDurationIsTrue => #5
                SubscribeSubject File
                -> MemberSelector(Selector=SegmentMode)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=MultipleFiles))
                -> WorkflowOutput
            SubscribeSubject File
            -> MemberSelector(Selector=TotalDuration)
            -> PropertyMapping(Value) => #8
            #5, #8 -> IntProperty(Value=3600)
            -> MulticastSubject TotalTimeRemaining
    -> GroupWorkflow "Plot Data"
        WorkflowInput Source1 => #0
        SubscribeSubject DataDisplay => #1
        #0, #1 -> WithLatestFrom
        -> GroupWorkflow "Render Data Panel" => #3
            WorkflowInput Source1 => #0
            SubscribeSubject Frame
            -> MemberSelector(Selector=Image) => #2
            -> GroupWorkflow RawImage => #3
                BehaviorSubject<OpenCV.Net.IplImage> CachedRawImage

                WorkflowInput Source1 => #1
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #2
                GroupWorkflow EmitCachedImage => #3
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Status
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition RawTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Raw))
                        -> WorkflowOutput
                    SubscribeSubject CachedRawImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #2, #3 -> Merge
                -> Condition RawTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Raw))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #1 -> GroupWorkflow CacheRawImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedRawImage
                    -> WorkflowOutput
            #2 -> GroupWorkflow DffImage => #4
                BehaviorSubject<OpenCV.Net.IplImage> CachedDffImage

                WorkflowInput Source1
                -> GroupWorkflow "Calculate DeltaFOverF" => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject DataDisplay
                    -> MemberSelector(Selector=Dff) => #2
                    -> MemberSelector(Selector=BackgroundFrames)
                    -> PropertyMapping(BackgroundFrames) => #4
                    #2 -> MemberSelector(Selector=BackgroundThreshold)
                    -> PropertyMapping(BackgroundThreshold) => #6
                    #2 -> MemberSelector(Selector=Sigma)
                    -> PropertyMapping(Sigma) => #8
                    #0, #4, #6, #8 -> OpenEphys.Miniscope.DeltaFOverF(BackgroundFrames=100, BackgroundThreshold=92, Sigma=3)
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Status
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition DffTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Dff))
                        -> WorkflowOutput
                    SubscribeSubject CachedDffImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition DffTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Dff))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedDffImage
                    -> WorkflowOutput
            #2 -> GroupWorkflow SaturationImage => #5
                BehaviorSubject<OpenCV.Net.IplImage> CachedSaturationImage

                WorkflowInput Source1
                -> GroupWorkflow CalculateDisplaySaturation => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject DataDisplay
                    -> MemberSelector(Selector=Saturation) => #2
                    -> MemberSelector(Selector=Threshold)
                    -> PropertyMapping(ThresholdValue) => #4
                    #0, #4 -> Bonsai.Vision.Threshold(ThresholdValue=160, MaxValue=255, ThresholdType=Binary) => #5
                    -> MemberSelector(Selector=Size)
                    -> PropertyMapping(Size) => #7
                    #2 -> MemberSelector(Selector=Color)
                    -> PropertyMapping(Color) => #9
                    #5, #7, #9 -> Bonsai.Vision.SolidColor(Size(Width=608, Height=608), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=100, Val3=0)) => #10
                    #10, #5 -> Zip
                    -> Bonsai.Vision.Mask(FillValue(Val0=0, Val1=0, Val2=0, Val3=1)) => #12
                    #0, #4 -> Bonsai.Vision.Threshold(ThresholdValue=160, MaxValue=255, ThresholdType=ToZeroInv) => #13
                    #12, #13 -> Zip
                    -> Add
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Status
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition SaturationTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Saturation))
                        -> WorkflowOutput
                    SubscribeSubject CachedSaturationImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition SaturationTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Saturation))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheSaturationImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedSaturationImage
                    -> WorkflowOutput
            #2 -> GroupWorkflow MaxProjectionImage => #6
                BehaviorSubject<OpenCV.Net.IplImage> CachedMaxProjectionImage

                WorkflowInput Source1
                -> GroupWorkflow MaxProjection => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject DataDisplay
                    -> MemberSelector(Selector=MaxProjection) => #2
                    SubscribeSubject Status
                    -> MemberSelector(Selector=IsConnected)
                    -> Condition Connected
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true) => #6
                    -> PropertyMapping(Reset) => #7
                    #7, #6 -> OpenEphys.MiniscopeV4.Gui.MaxProjectionSettings(Reset=true) => #8
                    #2, #8 -> Merge => #9
                    #0, #9 -> OpenEphys.MiniscopeV4.Gui.CalculateMaxProjection
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Status
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition MaxProjectionTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=MaxProjection))
                        -> WorkflowOutput
                    SubscribeSubject CachedMaxProjectionImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition MaxProjectionTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=MaxProjection))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedMaxProjectionImage
                    -> WorkflowOutput
            #2 -> GroupWorkflow OverlayImage => #7
                BehaviorSubject<OpenCV.Net.IplImage> CachedOverlayImage

                WorkflowInput Source1
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick
                -> GroupWorkflow Overlay => #3
                    WorkflowInput Source1 => #0
                    SubscribeSubject DataDisplay
                    -> MemberSelector(Selector=Overlay) => #2
                    #0, #2 -> WithLatestFrom => #3
                    SubscribeSubject MiniscopeLog => #4
                    #3, #4 -> OpenEphys.MiniscopeV4.Gui.OverlayReference
                    -> WorkflowOutput
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Status
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition OverlayTab => #3
                        WorkflowInput Source1 => #0
                        SubscribeSubject ImageTab => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Overlay))
                        -> WorkflowOutput
                    SubscribeSubject CachedOverlayImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition OverlayTab
                    WorkflowInput Source1 => #0
                    SubscribeSubject ImageTab => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Overlay))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #3 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedOverlayImage
                    -> WorkflowOutput
            #3, #4, #5, #6, #7 -> Merge
            -> PropertyMapping(ActiveImage) => #9
            #2 -> MemberSelector(Selector=Size)
            -> DistinctUntilChanged => #11
            -> MemberSelector(Selector=Height)
            -> PropertyMapping(ImageHeight) => #13
            #11 -> MemberSelector(Selector=Width)
            -> PropertyMapping(ImageWidth) => #15
            #2 -> Bonsai.Vision.ImageHistogram
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(ImageHistogram) => #18
            SubscribeSubject Status
            -> MemberSelector(Selector=IsConnected)
            -> DistinctUntilChanged
            -> Condition => #22
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject DataDisplay
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(Capacity) => #25
            #22, #25 -> SelectMany
                SubscribeSubject Frame
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
                -> MemberSelector(Selector=Quaternion) => #2
                ExternalizedMapping(Capacity) => #3
                #2, #3 -> OpenEphys.MiniscopeV4.Gui.CircularBufferBuilder(Capacity=1800, ValueSelector="X,Y,Z,W") => #4
                SubscribeSubject Status
                -> MemberSelector(Selector=IsConnected)
                -> Condition => #7
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #4, #7 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(QuaternionSeries) => #28
            #25, #22 -> SelectMany
                SubscribeSubject Frame
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
                -> MemberSelector(Selector=DigitalIn) => #2
                -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #3
                #2 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn1)) => #4
                #3, #4 -> Zip => #5
                ExternalizedMapping(Capacity) => #6
                #5, #6 -> OpenEphys.MiniscopeV4.Gui.CircularBufferBuilder(Capacity=1800, ValueSelector="Item1,Item2") => #7
                SubscribeSubject Status
                -> MemberSelector(Selector=IsConnected)
                -> Condition => #10
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #7, #10 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(DigitalInSeries) => #31
            #22, #25 -> SelectMany
                SubscribeSubject Frame
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
                -> MemberSelector(Selector=Quaternion)
                -> OpenEphys.Miniscope.QuaternionToEuler => #3
                ExternalizedMapping(Capacity) => #4
                #3, #4 -> OpenEphys.MiniscopeV4.Gui.CircularBufferBuilder(Capacity=1800, ValueSelector="Yaw,Pitch,Roll") => #5
                SubscribeSubject Status
                -> MemberSelector(Selector=IsConnected)
                -> Condition => #8
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #5, #8 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(EulerAnglesSeries) => #34
            SubscribeSubject Status
            -> MemberSelector(Selector=IsConnected)
            -> PropertyMapping(AcquisitionStatus) => #37
            SubscribeSubject AverageFrameRate
            -> PropertyMapping(AverageFrameRate) => #39
            SubscribeSubject Frame
            -> MemberSelector(Selector=FrameNumber)
            -> PropertyMapping(FrameNumber) => #42
            SubscribeSubject DroppedFrames
            -> PropertyMapping(DroppedFrames) => #44
            SubscribeSubject File
            -> MemberSelector(Selector=FileName)
            -> PropertyMapping(DataPath) => #47
            SubscribeSubject Miniscope
            -> MemberSelector(Selector=FrameRate)
            -> PropertyMapping(SelectedFrameRate) => #50
            SubscribeSubject Status
            -> MemberSelector(Selector=Paused)
            -> PropertyMapping(Paused) => #53
            #0, #9, #13, #15, #18, #28, #31, #34, #37, #39, #42, #44, #47, #50, #53 -> OpenEphys.MiniscopeV4.Gui.DataPanel(ImageHeight=608, ImageWidth=608)
            -> WorkflowOutput

            SubscribeSubject Status
            -> MemberSelector(Selector=Paused)
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PublishSubject SnapshotTick
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #3 -> MemberSelector(Selector=Item2)
        -> DistinctUntilChanged
        -> MulticastSubject DataDisplay
        #3 -> MemberSelector(Selector=Item3)
        -> DistinctUntilChanged
        -> MulticastSubject ImageTab

        GroupWorkflow "Capture Current Image"
            SubscribeSubject DataDisplay
            -> MemberSelector(Selector=Overlay)
            -> Condition MiniscopeConnected
                SubscribeSubject Status
                -> MemberSelector(Selector=IsConnected)
                -> WorkflowOutput
            -> MemberSelector(Selector=Capture)
            -> Condition CaptureRequested => #4
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject Frame => #5
            #4, #5 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #7
            SubscribeSubject MiniscopeLog => #8
            SubscribeSubject File
            -> MemberSelector(Selector=FileName)
            -> PropertyMapping(DataPath) => #11
            #7, #8, #11 -> OpenEphys.MiniscopeV4.Gui.CaptureCurrentImage
    -> GroupWorkflow Console
        WorkflowInput Source1 => #0
        SubscribeSubject MiniscopeLog => #1
        #0, #1 -> OpenEphys.MiniscopeV4.Gui.ConsolePanel
        -> WorkflowOutput
    -> MulticastSubject GuiLayout

    GroupWorkflow "Log Property Changes"
        ExternalizedMapping(DueTime) => #0
        SubscribeSubject Miniscope => #1
        -> MemberSelector(Selector=Focus) => #2
        #0, #2 -> GroupWorkflow Focus
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            ExternalizedMapping(DueTime) => #2
            #0, #1, #2 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0.05S, Format="Focus: {0}", Selector=it)
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=LedBrightness) => #4
        #0, #4 -> GroupWorkflow LedBrightness
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            SubscribeSubject MiniscopeLog => #2
            Source1=#0, Source2=#1, Source2=#2 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0.05S, Format="LED Brightness: {0}", Selector=it)
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=FrameRate)
        -> GroupWorkflow FrameRate
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Frame Rate: {0}", Selector=it)
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=SensorGain)
        -> GroupWorkflow SensorGain
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Sensor Gain: {0}", Selector=it)
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=LedRespectsDigitalIn)
        -> GroupWorkflow LedRespectsDigitalIn
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="LED Respects Digital In: {0}", Selector=it)
            -> WorkflowOutput

        SubscribeSubject Status
        -> MemberSelector(Selector=CameraIndex)
        -> GroupWorkflow CameraIndex
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Camera Index: {0}", Selector=it)
            -> WorkflowOutput

        SubscribeSubject Commutator => #15
        -> MemberSelector(Selector=EnableLed)
        -> GroupWorkflow CommutatorEnableLed
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Commutator LED Enabled: {0}", Selector=it)
            -> WorkflowOutput
        #15 -> MemberSelector(Selector=Enable)
        -> GroupWorkflow CommutatorEnable
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Commutator Enabled: {0}", Selector=it)
            -> WorkflowOutput
        #15 -> MemberSelector(Selector=PortName)
        -> GroupWorkflow PortName
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="COM Port: {0}", Selector=it)
            -> WorkflowOutput
        #15 -> MemberSelector(Selector=AutoConnect)
        -> GroupWorkflow AutoConnect
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="AutoConnect: {0}", Selector=it)
            -> WorkflowOutput

GroupWorkflow "Save Data"
    SubscribeSubject Frame => #0
    SubscribeSubject File => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.RecordButton)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Condition "Miniscope Connected"
        SubscribeSubject Status
        -> MemberSelector(Selector=IsConnected)
        -> WorkflowOutput
    -> Condition NotTriggerMode => #7
        SubscribeSubject File
        -> MemberSelector(Selector=RecordingMode)
        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Trigger))
        -> BitwiseNot
        -> WorkflowOutput
    SubscribeSubject Frame
    -> MemberSelector(Selector=DigitalIn) => #9
    SubscribeSubject File
    -> MemberSelector(Selector=TriggerInput)
    -> PropertyMapping(Value) => #12
    #9, #12 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #13
    SubscribeSubject File
    -> MemberSelector(Selector=RecordButton)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Condition "Miniscope Connected"
        SubscribeSubject Status
        -> MemberSelector(Selector=IsConnected)
        -> WorkflowOutput
    -> Condition "Triggered Mode" => #19
        SubscribeSubject File
        -> MemberSelector(Selector=RecordingMode)
        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Trigger))
        -> WorkflowOutput
    #13, #19 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 && it.Item2
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #23
    #7, #23 -> Merge
    -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
    -> PublishSubject GenerateFileNames
    -> Take(Count=1)
    -> MulticastSubject RecordingStatus
    -> StringProperty
    -> MulticastSubject RecordingError
    -> BooleanProperty(Value=false)
    -> MulticastSubject TotalDurationElapsed => #32
    SubscribeSubject Miniscope
    -> MemberSelector(Selector=FrameRate)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32(it.ToString().Substring(3))
    -> PropertyMapping(FrameRate) => #36
    SubscribeSubject File
    -> MemberSelector(Selector=CompressVideo)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it ? "MJPG" : "Y800"
    -> PropertyMapping(FourCC) => #40
    SubscribeSubject GenerateFileNames => #41
    SubscribeSubject File
    -> MemberSelector(Selector=FileName)
    -> PropertyMapping(FileName) => #44
    SubscribeSubject File
    -> MemberSelector(Selector=Suffix)
    -> PropertyMapping(Suffix) => #47
    #41, #44, #47 -> OpenEphys.MiniscopeV4.Gui.GenerateRecordingFileNames(FileName="", Suffix=FileCount)
    -> GroupWorkflow "Log Recording Files" => #49
        WorkflowInput Source1 => #0
        -> WorkflowOutput
        #0 -> MemberSelector(Selector=ImageFileName)
        -> Format(Format="Saving image file: {0}") => #3
        #0 -> MemberSelector(Selector=LogFileName)
        -> Format(Format="Saving log file: {0}") => #5
        #0 -> MemberSelector(Selector=CsvFileName)
        -> Format(Format="Saving CSV file: {0}") => #7
        #3, #5, #7 -> Merge => #8
        SubscribeSubject MiniscopeLog => #9
        #8, #9 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo
    -> MemberSelector(Selector=ImageFileName)
    -> PropertyMapping(ImageFileName) => #51
    #49 -> MemberSelector(Selector=CsvFileName)
    -> PropertyMapping(CsvFileName) => #53
    #49 -> MemberSelector(Selector=LogFileName)
    -> PropertyMapping(LogFileName) => #55
    #49 -> MemberSelector(Selector=ConfigFileName)
    -> PropertyMapping(ConfigFileName) => #57
    #32, #36, #40, #51, #53, #55, #57 -> SelectMany "Save Data"
        SubscribeSubject Frame => #0
        GroupWorkflow "Button Stop" => #1
            SubscribeSubject File
            -> MemberSelector(Selector=RecordButton)
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> WorkflowOutput
        #0 -> GroupWorkflow "TriggerInput Stop" => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=DigitalIn) => #1
            SubscribeSubject File
            -> MemberSelector(Selector=TriggerInput)
            -> PropertyMapping(Value) => #4
            #1, #4 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0))
            -> BitwiseNot => #6
            SubscribeSubject File
            -> MemberSelector(Selector=RecordingMode)
            -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Trigger))
            -> DistinctUntilChanged => #10
            #6, #10 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
              Expression: it.Item1 && it.Item2
            SubscribeSubject File
            -> MemberSelector(Selector=RecordButton)
            -> DistinctUntilChanged => #15
            #12, #15 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 && it.Item2
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        GroupWorkflow "Record Duration Stop" => #3
            SubscribeSubject File
            -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
            -> MemberSelector(Selector=RecordingMode)
            -> DistinctUntilChanged
            -> Condition IsSegmentedMode
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Segmented))
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #5
            SubscribeSubject File
            -> MemberSelector(Selector=RecordingDuration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Delay(DueTime=PT10M)
            -> PublishSubject RecordDurationElapsed
            -> WorkflowOutput

            SubscribeSubject RecordDurationElapsed
            -> Condition TotalDurationIsTrue => #14
                SubscribeSubject File
                -> MemberSelector(Selector=SegmentMode)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=MultipleFiles))
                -> WorkflowOutput
            SubscribeSubject File
            -> MemberSelector(Selector=RecordingDuration) => #16
            #14, #16 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #18
              Expression: it.Item2
            SubscribeSubject TotalTimeRemaining => #19
            #18, #19 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item2 - it.Item1
            -> MulticastSubject TotalTimeRemaining
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it < 1
            -> Condition LessThanOne
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject TotalDurationElapsed
        GroupWorkflow "Disconnected Stop" => #4
            SubscribeSubject Status
            -> MemberSelector(Selector=IsConnected)
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> WorkflowOutput
        GroupWorkflow "Total Duration Stop" => #5
            SubscribeSubject File
            -> MemberSelector(Selector=RecordingMode)
            -> DistinctUntilChanged
            -> Condition IsSegmentedMode
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Segmented))
                -> WorkflowOutput
            -> Condition TotalDurationIsTrue => #4
                SubscribeSubject File
                -> MemberSelector(Selector=SegmentMode)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=MultipleFiles))
                -> WorkflowOutput
            SubscribeSubject TotalTimeRemaining
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #7
            #4, #7 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true)
            -> MulticastSubject TotalDurationElapsed
            -> WorkflowOutput
        #1, #2, #3, #4, #5 -> Merge
        -> Take(Count=1)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordingStatus => #10
        #0, #10 -> TakeUntil => #11
        SubscribeSubject MiniscopeLog => #12
        ExternalizedMapping(FileName(DisplayName=LogFileName)) => #13
        #11, #12, #13 -> OpenEphys.MiniscopeV4.Gui.WriteLogsToFile(FileName=0.log)
        -> WorkflowOutput
        #11 -> MemberSelector(Selector="FrameNumber,HardwareTime,Quaternion.X,Quaternion.Y,Quaternion.Z,Quaternion.W") => #16
        #11 -> MemberSelector(Selector=DigitalIn) => #17
        -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #18
        #17 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn1)) => #19
        #16, #18, #19 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new (it.Item1.Item1 as FrameNumber, it.Item1.Item2 as HardwareTime, it.Item1.Item3 as Quaternion_X, it.Item1.Item4 as Quaternion_Y, it.Item1.Item5 as Quaternion_Z, it.Item1.Item6 as Quaternion_W, it.Item2 as DigitalIn0, it.Item3 as DigitalIn1)
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
          Expression: new (it.Value.FrameNumber as FrameNumber, it.Value.HardwareTime as HardwareTime, it.Value.Quaternion_X as Quaternion_X, it.Value.Quaternion_Y as Quaternion_Y, it.Value.Quaternion_Z as Quaternion_Z, it.Value.Quaternion_W as Quaternion_W, it.Value.DigitalIn0 as DigitalIn0, it.Value.DigitalIn1 as DigitalIn1, it.Timestamp as Timestamp)
        ExternalizedMapping(FileName(DisplayName=CsvFileName)) => #24
        #23, #24 -> Bonsai.IO.CsvWriter(FileName=0.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError => #29
        -> Catch
        #11 -> MemberSelector(Selector=Image)
        -> Bonsai.Vision.Grayscale => #32
        ExternalizedMapping(FourCC, FrameRate, FileName(DisplayName=ImageFileName)) => #33
        #32, #33 -> Bonsai.Vision.VideoWriter
          FileName=0.avi
          Suffix=None
          Buffered=true
          Overwrite=false
          FourCC=Y800
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError => #38
        #29, #38 -> Merge
        -> Take(Count=1)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordingStatus
        #38 -> Catch
        #0 -> Take(Count=1)
        -> GroupWorkflow SerializeConfiguration => #46
            WorkflowInput Source1
            -> OpenEphys.MiniscopeV4.Gui.ConfigurationRequest(RequestType=None, ConfigFilePath="")
            -> MulticastSubject GenerateHardwareSettings
            -> MulticastSubject GenerateMiniscopeConfiguration => #3
            SubscribeSubject GenerateMiniscopeConfiguration => #4
            SubscribeSubject GenerateHardwareSettings => #5
            SubscribeSubject Miniscope
            -> PropertyMapping(Miniscope) => #7
            SubscribeSubject Commutator
            -> PropertyMapping(Commutator) => #9
            #5, #7, #9 -> OpenEphys.MiniscopeV4.Gui.HardwareSettings
            -> PropertyMapping(Hardware) => #11
            SubscribeSubject Status
            -> PropertyMapping(Camera) => #13
            SubscribeSubject DataDisplay
            -> PropertyMapping(Display) => #15
            SubscribeSubject File
            -> PropertyMapping(File) => #17
            #4, #11, #13, #15, #17 -> OpenEphys.MiniscopeV4.Gui.MiniscopeConfiguration => #18
            #3, #18 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> OpenEphys.MiniscopeV4.Gui.SerializeToYaml
            -> WorkflowOutput
        ExternalizedMapping(Path(DisplayName=ConfigFileName)) => #47
        #46, #47 -> Bonsai.IO.WriteAllText(Path=0.yml, Overwrite=false, Append=false)
    -> Repeat

    GroupWorkflow "Reset Button On Disconnect"
        SubscribeSubject Status
        -> MemberSelector(Selector=IsConnected)
        -> DistinctUntilChanged
        -> Condition IsFalse
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> PublishSubject ResetButton => #6
        SubscribeSubject ResetButton
        -> PropertyMapping(RecordButton) => #8
        SubscribeSubject File => #9
        -> MemberSelector(Selector=RecordingMode)
        -> PropertyMapping(RecordingMode) => #11
        #9 -> MemberSelector(Selector=CompressVideo)
        -> PropertyMapping(CompressVideo) => #13
        #9 -> MemberSelector(Selector=FileName)
        -> PropertyMapping(FileName) => #15
        #9 -> MemberSelector(Selector=Suffix)
        -> PropertyMapping(Suffix) => #17
        #9 -> MemberSelector(Selector=RecordingDuration)
        -> PropertyMapping(RecordingDuration) => #19
        #9 -> MemberSelector(Selector=TotalDuration)
        -> PropertyMapping(TotalDuration) => #21
        #9 -> MemberSelector(Selector=TriggerInput)
        -> PropertyMapping(TriggerInput) => #23
        #9 -> MemberSelector(Selector=SegmentMode)
        -> PropertyMapping(SegmentMode) => #25
        #6, #8, #11, #13, #15, #17, #19, #21, #23, #25 -> OpenEphys.MiniscopeV4.Gui.FileSettings
          RecordButton=false
          RecordingMode=Manual
          CompressVideo=false
          FileName=""
          Suffix=FileCount
          RecordingDuration=600
          TotalDuration=3600
          SegmentMode=MultipleFiles
          TriggerInput=DigitalIn0
        -> MulticastSubject File

    GroupWorkflow "Reset Button for Duration"
        SubscribeSubject RecordingStatus
        -> DistinctUntilChanged
        -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition IsSegmentedRecording => #3
            SubscribeSubject File
            -> MemberSelector(Selector=RecordingMode)
            -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Segmented))
            -> WorkflowOutput
        -> Condition AutoRestartIsTrue
            SubscribeSubject File
            -> MemberSelector(Selector=SegmentMode)
            -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=AutoRestart))
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> PublishSubject AutoRestartTriggered
        #3 -> Condition TotalDurationIsTrue => #7
            SubscribeSubject File
            -> MemberSelector(Selector=SegmentMode)
            -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=MultipleFiles))
            -> WorkflowOutput
        -> Condition TotalDurationNotFinished
            SubscribeSubject TotalDurationElapsed
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject AutoRestartTriggered
        #7 -> Condition TotalDurationFinished => #11
            SubscribeSubject TotalDurationElapsed
            -> WorkflowOutput
        #3 -> Condition SingleFileIsTrue => #12
            SubscribeSubject File
            -> MemberSelector(Selector=SegmentMode)
            -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=SingleFile))
            -> WorkflowOutput
        #11, #12 -> Merge
        -> BooleanProperty(Value=false)
        -> PublishSubject ResetButtonForDuration => #15
        SubscribeSubject ResetButtonForDuration
        -> PropertyMapping(RecordButton) => #17
        SubscribeSubject File => #18
        -> MemberSelector(Selector=RecordingMode)
        -> PropertyMapping(RecordingMode) => #20
        #18 -> MemberSelector(Selector=CompressVideo)
        -> PropertyMapping(CompressVideo) => #22
        #18 -> MemberSelector(Selector=FileName)
        -> PropertyMapping(FileName) => #24
        #18 -> MemberSelector(Selector=Suffix)
        -> PropertyMapping(Suffix) => #26
        #18 -> MemberSelector(Selector=RecordingDuration)
        -> PropertyMapping(RecordingDuration) => #28
        #18 -> MemberSelector(Selector=TriggerInput)
        -> PropertyMapping(TriggerInput) => #30
        #18 -> MemberSelector(Selector=TotalDuration)
        -> PropertyMapping(TotalDuration) => #32
        #18 -> MemberSelector(Selector=SegmentMode)
        -> PropertyMapping(SegmentMode) => #34
        #15, #17, #20, #22, #24, #26, #28, #30, #32, #34 -> OpenEphys.MiniscopeV4.Gui.FileSettings
          RecordButton=false
          RecordingMode=Manual
          CompressVideo=false
          FileName=""
          Suffix=FileCount
          RecordingDuration=600
          TotalDuration=3600
          SegmentMode=MultipleFiles
          TriggerInput=DigitalIn0
        -> MulticastSubject File

    GroupWorkflow "Reset Button On Error"
        SubscribeSubject RecordingError
        -> Condition => #1
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !string.IsNullOrEmpty(it)
            -> WorkflowOutput
        SubscribeSubject MiniscopeStatus
        -> Condition => #3
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !string.IsNullOrEmpty(it)
            -> WorkflowOutput
        #1, #3 -> Merge
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> PublishSubject UpdateRecordButton => #7
        SubscribeSubject UpdateRecordButton
        -> PropertyMapping(RecordButton) => #9
        SubscribeSubject File => #10
        -> MemberSelector(Selector=RecordingMode)
        -> PropertyMapping(RecordingMode) => #12
        #10 -> MemberSelector(Selector=CompressVideo)
        -> PropertyMapping(CompressVideo) => #14
        #10 -> MemberSelector(Selector=FileName)
        -> PropertyMapping(FileName) => #16
        #10 -> MemberSelector(Selector=Suffix)
        -> PropertyMapping(Suffix) => #18
        #10 -> MemberSelector(Selector=RecordingDuration)
        -> PropertyMapping(RecordingDuration) => #20
        #10 -> MemberSelector(Selector=TriggerInput)
        -> PropertyMapping(TriggerInput) => #22
        #10 -> MemberSelector(Selector=TotalDuration)
        -> PropertyMapping(TotalDuration) => #24
        #10 -> MemberSelector(Selector=SegmentMode)
        -> PropertyMapping(SegmentMode) => #26
        #7, #9, #12, #14, #16, #18, #20, #22, #24, #26 -> OpenEphys.MiniscopeV4.Gui.FileSettings
          RecordButton=false
          RecordingMode=Manual
          CompressVideo=false
          FileName=""
          Suffix=FileCount
          RecordingDuration=600
          TotalDuration=3600
          SegmentMode=MultipleFiles
          TriggerInput=DigitalIn0
        -> MulticastSubject File

    GroupWorkflow "Log Recording End"
        SubscribeSubject RecordingStatus
        -> DistinctUntilChanged
        -> Skip(Count=1)
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value="Stopping recording.") => #4
        SubscribeSubject MiniscopeLog => #5
        #4, #5 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo

GroupWorkflow Commutator
    SubscribeSubject Commutator
    -> MemberSelector(Selector=IsConnected)
    -> DistinctUntilChanged
    -> Condition True
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #4
    SubscribeSubject Commutator => #5
    -> MemberSelector(Selector=PortName)
    -> DistinctUntilChanged
    -> PropertyMapping(PortName) => #8
    #5 -> MemberSelector(Selector=Enable)
    -> DistinctUntilChanged
    -> PropertyMapping(Enable) => #11
    #5 -> MemberSelector(Selector=EnableLed)
    -> DistinctUntilChanged
    -> PropertyMapping(EnableLed) => #14
    #4, #8, #11, #14 -> SelectMany
        SubscribeSubject Frame
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> MemberSelector(Selector=Quaternion) => #2
        ExternalizedMapping(PortName, Enable, EnableLed) => #3
        #2, #3 -> IncludeWorkflow(Path=OpenEphys.Commutator:AutoCommutator.bonsai, PortName="", Enable=true, EnableLed=true) => #4
        SubscribeSubject Commutator
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> MemberSelector(Selector=IsConnected)
        -> Condition False => #8
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #4, #8 -> TakeUntil
        -> Materialize => #10
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch
        -> WorkflowOutput
        #10 -> Bonsai.Scripting.Expressions.ExpressionCondition => #15
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
          Expression: "Commutator error: " + it.Exception.Message
        SubscribeSubject MiniscopeLog => #17
        #16, #17 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogError
        #15 -> GroupWorkflow DisconnectCommutator
            WorkflowInput Source1
            -> Condition IsConnected
                SubscribeSubject Commutator
                -> MemberSelector(Selector=IsConnected)
                -> WorkflowOutput
            -> BooleanProperty(Value=false)
            -> PublishSubject Disconnected => #3
            SubscribeSubject Disconnected
            -> PropertyMapping(IsConnected) => #5
            SubscribeSubject Commutator => #6
            -> MemberSelector(Selector=PortName)
            -> PropertyMapping(PortName) => #8
            #6 -> MemberSelector(Selector=Enable)
            -> PropertyMapping(Enable) => #10
            #6 -> MemberSelector(Selector=EnableLed)
            -> PropertyMapping(EnableLed) => #12
            #6 -> MemberSelector(Selector=AutoConnect)
            -> PropertyMapping(AutoConnect) => #14
            #3, #5, #8, #10, #12, #14 -> OpenEphys.MiniscopeV4.Gui.CommutatorSettings(IsConnected=false, PortName=COM3, Enable=true, EnableLed=true, AutoConnect=false)
            -> MulticastSubject Commutator
            -> WorkflowOutput
        -> GroupWorkflow StopAcquisitionIfAutoConnect
            WorkflowInput Source1
            -> MemberSelector(Selector=AutoConnect)
            -> Condition True
                WorkflowInput Source1
                -> WorkflowOutput
            -> Condition MiniscopeConnected
                SubscribeSubject Status
                -> MemberSelector(Selector=IsConnected)
                -> WorkflowOutput
            -> StringProperty(Value="Acquisition stopped because a commutator is required.")
            -> MulticastSubject MiniscopeStatus
    -> Repeat

GroupWorkflow "Log Errors"
    SubscribeSubject RecordingError => #0
    SubscribeSubject MiniscopeStatus => #1
    #0, #1 -> Merge => #2
    SubscribeSubject MiniscopeLog => #3
    #2, #3 -> WithLatestFrom
    -> OpenEphys.MiniscopeV4.Gui.LogError
